PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = eeg_correct
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        c=101
        incorr=100
      Begin Routine:
        stimulus_pulse_started = False
        stimulus_pulse_ended = False
      Each Frame:
        # send trigger to port, converting to bytes
        # acceptable trigger values are 1-255 (integer values)
        if stimulus.status == STARTED and not stimulus_pulse_started:
        #    win.callOnFlip(port.write, str.encode(trig))
            win.callOnFlip(port.write, trig.to_bytes(1, 'little'))
            stimulus_pulse_start_time = globalClock.getTime()
            stimulus_pulse_started  = True

        # set port back to zero after 15 ms
        if stimulus_pulse_started and not stimulus_pulse_ended:
                if globalClock.getTime() - stimulus_pulse_start_time >= 0.015:
                    win.callOnFlip(port.write, b'\x00')
                    stimulus_pulse_ended = True
    TextComponent stimulus
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every repeat] = $word
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    KeyboardComponent key_resp
      allowedKeys = 'y','n'
      correctAns = $correct
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine Start
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    CodeComponent port_code
      Code Type = Auto->JS
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      Before Experiment:
        import serial, time
        port = serial.Serial('COM4', 115200)
    TextComponent title_2
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Instructions
    KeyboardComponent title_slide_key_resp
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
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    CodeComponent close_port
      Code Type = Auto->JS
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      Begin Routine:
        port.close()
    TextComponent finish
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Finished : )
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    KeyboardComponent final_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wordnonword
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  Routine blank
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .1
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp.corr==1:
            win.callOnFlip(port.write, c.to_bytes(1, 'little'))
        else:
            win.callOnFlip(port.write, incorr.to_bytes(1, 'little'))
Flow
  Routine Start
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = triggers.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'word': 'cat', 'trig': 55, 'cond': 'word', 'correct': 'y'},
      {'word': 'bat', 'trig': 55, 'cond': 'word', 'correct': 'y'},
      {'word': 'lklklk', 'trig': 50, 'cond': 'nonword', 'correct': 'n'}]
    Routine trial
    Routine blank
  LoopTerminator trials
  Routine end
