PsychoPy2experiment version="2024.1.5"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = triggerDemo
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        stimulus_pulse_started = False
        stimulus_pulse_ended = False
      Each Frame:
        # send trigger to port, converting to bytes
        # acceptable trigger values are 1-255 (integer values)
        if text.status == STARTED and not stimulus_pulse_started:
        #    win.callOnFlip(port.write, str.encode(trig))
            win.callOnFlip(port.write, trig.to_bytes(1,'little'))
            stimulus_pulse_start_time = globalClock.getTime()
            stimulus_pulse_started  = True

        # set port back to zero after 15 ms
        if stimulus_pulse_started and not stimulus_pulse_ended:
                if globalClock.getTime() - stimulus_pulse_start_time >= 0.015:
                    win.callOnFlip(port.write, b'\x00')
                    stimulus_pulse_ended = True
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text [set every repeat] = $item
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = .5
      text = ***
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  Routine instructions
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        import serial
        port = serial.Serial('COM3',115200)
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = ***
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  Routine thanks
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = Thanks
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        port.close()
Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = triggers.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'item': 'aaaa', 'trig': 1},
      {'item': 'bbbb', 'trig': 10},
      {'item': 'cccc', 'trig': 24},
      {'item': 'dddd', 'trig': 32},
      {'item': 'eeee', 'trig': 64},
      {'item': 'ffff', 'trig': 122},
      {'item': 'gggg', 'trig': 255}]
    Routine trial
  LoopTerminator trials
  Routine thanks
