PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-1,-1,-1]
  expName = millikey_delux_builder_demo
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine start
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    TextComponent text_norm
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        MilliKey Delux PsychoPy Builder demo.

        * Ensure a MilliKey Delux is connected to this computer and the light sensor is attached to the top left hand corner of the display.
        * After connecting the MilliKey device, ensure you have run the "autothreshold_millikey_delux_light_sensor.py" script in Coder atleast once prior to running this demo for the first time.

        Press the Space key to continue....

        Note: MilliKey Delux firmware version 1.5.5 or higher is required.
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent millikey_delux
      Code Type = Py
      Begin Experiment:
        import millikey_util_3 as millikey_util

        millikey_util.openMillikeySerialConnection(threaded_rx=True)

        print("win_frame_rate: ", 1000.0 / win.getActualFrameRate() / 1000.0)

        # MILLIKEY: Set MilliKey params for light sensor (trigger type, etc)
        millikey_util.setLightSensorParams()

        #print(millikey_util.sendSerial(txdata="GET CONFIG"))
      End Experiment:
        # MILLIKEY: Close MilliKey serial connection
        millikey_util.closeMillikey()
  Routine trial_start
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press a key to start next trial...
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    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent start_light_sensor
      Code Type = Py
      End Routine:
        millikey_util.startLightSensor()
        # MILLIKEY: Set the MilliKey timer to 0 on the next window flip (when the test stim is first displayed)
        win.callOnFlip(millikey_util.resetMilliKeyTimer)
  Routine trial_stim
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    PolygonComponent white_stim
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $requested_stim_duration
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  Routine trial_end
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    PolygonComponent polygon
      fillColor = white
      shape = rectangle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    CodeComponent handle_light_sensor_triggers
      Code Type = Py
      End Routine:
        # MILLIKEY: Get all light sensor triggers that occurred during stim presentation,
        # until no triggers are read for 0.05 seconds
        triggers = []
        trig, trig_time = millikey_util.getNextLightTrigger(0.05)
        while trig:
            triggers.append((trig_time, trig))
            trig, trig_time = millikey_util.getNextLightTrigger(0.05)

        # MILLIKEY: Turn off the MilliKey light sensor (stop sending any light triggers)
        millikey_util.stopLightSensor()

        # Get first and last triggers
        on_reading = off_reading = None
        on_ttime = off_ttime = None
        if len(triggers) > 0:
            on_ttime, on_reading = triggers[0]
        if len(triggers) > 1:
            off_ttime, off_reading = triggers[-1]

        # save light sensor trial results
        if on_reading is None or off_reading is None:
            print("WARNING: No start and/or end light triggers read for trial ")
        else:
            thisExp.addData('delux.stim_onset_delay', on_ttime)
            thisExp.addData('delux.stim_duration', off_ttime - on_ttime)
        if on_reading:
            thisExp.addData('delux.onset_trigger', on_reading)
        if off_reading:
            thisExp.addData('delux.offset_trigger', off_reading)
  Routine end
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    TextComponent text_norm_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Experiment Completed

        Press the spacebar to continue
    KeyboardComponent key_instruct_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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Flow
  Routine start
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trial_conditions.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('trial_id', 1), ('requested_stim_duration', 0.1)]),
      OrderedDict([('trial_id', 2), ('requested_stim_duration', 0.2)]),
      OrderedDict([('trial_id', 3), ('requested_stim_duration', 0.3)]),
      OrderedDict([('trial_id', 4), ('requested_stim_duration', 0.4)]),
      OrderedDict([('trial_id', 5), ('requested_stim_duration', 0.5)]),
      OrderedDict([('trial_id', 6), ('requested_stim_duration', 0.6)]),
      OrderedDict([('trial_id', 7), ('requested_stim_duration', 0.7)]),
      OrderedDict([('trial_id', 8), ('requested_stim_duration', 0.8)]),
      OrderedDict([('trial_id', 9), ('requested_stim_duration', 0.9)]),
      OrderedDict([('trial_id', 10), ('requested_stim_duration', 1.0)])]
    Routine trial_start
    Routine trial_stim
    Routine trial_end
  LoopTerminator trials
  Routine end
