PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = fnris_expt_test
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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  Routine Welcome
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Welcome to the experiment! Instructions go here
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Fixation
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine Nonsemantic
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Is the word upper or lower case?
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  Routine Nonsemantic_judge
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  Routine Fix_start
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text = +
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  Routine fix_end
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text = +
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  Routine readyMsg
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    TextComponent task
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
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    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine judgement
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    TextComponent word
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $value
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    TextComponent fix_cross
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      text = +
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine Memory_Instr
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Memory stuff here
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  Routine OldNew
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = stim
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  Routine memory
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  Routine confidence
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    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        How confident are you?

        1. Very Sure
        2. Sure
        3. Unsure
    KeyboardComponent key_resp_4
      allowedKeys = '1', '2', '3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Theend
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    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = This is the end. 
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Flow
  Routine Welcome
  LoopInitiator run1 loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine Fix_start
    LoopInitiator blocks1 loopType="TrialHandler"
      conditionsFile = block1A.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'condsFile': 'block_1_semantic_original_A.csv', 'msg': 'see some semantic stuff'},
        {'condsFile': 'fix.xlsx', 'msg': 'look at fixation'},
        {'condsFile': 'block_2_non-semantic_original_A.csv', 'msg': 'see some non-semantic stuff'},
        {'condsFile': 'fix.xlsx', 'msg': 'look at fixation'},
        {'condsFile': 'block_1_semantic_original_A.csv', 'msg': 'see some semantic stuff'},
        {'condsFile': 'fix.xlsx', 'msg': 'look at fixation'},
        {'condsFile': 'block_2_non-semantic_original_A.csv', 'msg': 'see some non-semantic stuff'}]
      Routine readyMsg
      LoopInitiator trials1 loopType="TrialHandler"
        conditionsFile = $condsFile
        loopType = random
        nReps = 1
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        Routine judgement
      LoopTerminator trials1
    LoopTerminator blocks1
    Routine fix_end
  LoopTerminator run1
  Routine Memory_Instr
  LoopInitiator trials_4 loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine OldNew
    Routine confidence
  LoopTerminator trials_4
  Routine Theend
